<?xml version="1.0" ?>
<RecipeFile>

    	<!-- GA2-PEM_2x76Cycle+8_v7.7.xml -->
    	<!-- For use with AF4a ImageCyclePump config file -->
    	<!-- DO NOT USE with the GA1 Sequencer -->
   	<!-- Use with V2 Cluster kits-->
    	<!-- Last updated 26AUG09 - TWBO -->
        <!-- Composite recipe SCS2.5 UNOFFICIAL -->

	<!-- Single Folder Paired End Multiplexing Recipe -->
	<!-- Automated Focus -->
        <!-- PCTR recipe for use with RDP SBS Enzyme (do not use with SDP) -->


        <!-- Read 1 SBS (including FirstBase), Read 2 PEM Prime and Prep, Read 2 SBS (including FirstBase) -->
    	<!-- ReadPrep command used for FirstBase imaging for Read 1 and Read 2 -->
    	<!-- Incorporation and Deblock incubation wait times reduced from 180 s to 80 s -->
    	<!-- Wait time after temperature changes reduced from 120 s to 0 s -->
    	<!-- TempOff command moved to directly after Temp=22 command -->
    	<!-- PR1 (HSB) & PR2 (IB) returned to old positions 4 and 5 respectively -->
    	<!-- Water Prime (Wash) of PEM after Read 2 FirstBase -->

    	<!-- Premix PE steps removed -->
    	<!-- 60 ul/min scan mix pump -->
    	<!-- SMX flush prior to AFcal -->
    	<!-- PEM prewash -->
    	<!-- PEM flowtest -->
    	<!-- PEM postwash -->
    	<!-- Water Prime Included -->
	
    	<!-- Exposure Time: 1225ms (A=500, C=350, G=200, T=175) -->
    	<!-- No. Tiles Per Column: 60 -->
    	<!-- No. Cycles: 2 x 76+8 -->

  <TileSelection>

    <Incorporation>
	<Lane Index="1"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="2"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="3"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="4"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="5"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="6"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="7"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="8"><RowRange Min="1" Max="60"/></Lane>
    </Incorporation>

    <ReadPrep>
  	<Row Index="15" /> 
  	<Row Index="30" /> 
  	<Row Index="45" /> 
    </ReadPrep>

  </TileSelection>

  <ChemistryDefinitions>

	<!-- DEFINITIONS: GENOME ANALYZER SBS -->
     

<Chemistry Name="FirstBase">
	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="75" />
	<Temp Temperature="55" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="75" />
  	<Wait Duration="80000" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="25" />
  	<Wait Duration="80000" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="25" />
  	<Wait Duration="80000" />
  	<Temp Temperature="22" />
	<TempOff />
  	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="125" />	
    </Chemistry>

    <Chemistry Name="CompleteCycle">
	<PumpToFlowcell Solution="7" AspirationRate="250" DispenseRate="2500" Volume="125" />
	<Temp Temperature="55" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="75" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="40" />
        <PumpToFlowcell Solution="4" AspirationRate="250" DispenseRate="2500" Volume="100" />
	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="40" />	
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="75" />
  	<Wait Duration="80000" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="25" />
  	<Wait Duration="80000" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="25" />
  	<Wait Duration="80000" />
  	<Temp Temperature="22" />
	<TempOff />
  	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="60" />
	<PumpToFlowcell Solution="3" AspirationRate="60" DispenseRate="2500" Volume="75" />
    </Chemistry>
  
    <Chemistry Name="EndDeblock">
	<PumpToFlowcell Solution="7" AspirationRate="250" DispenseRate="2500" Volume="125" />
	<Temp Temperature="55" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="75" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<Temp Temperature="22" />
	<TempOff />
	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="75" />
    </Chemistry>    

    <Chemistry Name="PR2Flush">
  	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="100" /> 
    </Chemistry>

    <Chemistry Name="SMXFlush">
  	<PumpToFlowcell Solution="3" AspirationRate="60" DispenseRate="2500" Volume="75" /> 
    </Chemistry>
    
    <Chemistry Name="End">
  	<PumpToFlowcell Solution="2" AspirationRate="250" DispenseRate="2500" Volume="500" /> 
    </Chemistry>

	<!-- DEFINITIONS: PAIRED END MODULE (PRIME) -->

   
    <Chemistry Name="Prime10x12">
      <Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" />
      <Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" />
      <Prime Reagent="10" /><Prime Reagent="10" />
    </Chemistry>
    
    <Chemistry Name="Prime10x8">
      <Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" />
      <Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" />
    </Chemistry>

    <Chemistry Name="Prime11x12">
      <Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" />
      <Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" />
      <Prime Reagent="11" /><Prime Reagent="11" />
    </Chemistry>

    <Chemistry Name="Prime11x8">
      <Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" />
      <Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" />
    </Chemistry>

    <Chemistry Name="Prime12x12">
      <Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" />
      <Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" />
      <Prime Reagent="12" /><Prime Reagent="12" />
    </Chemistry>

    <Chemistry Name="Prime12x8">
      <Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" />
      <Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" />
    </Chemistry>

    <Chemistry Name="Prime13x12">
      <Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" />
      <Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" />
      <Prime Reagent="13" /><Prime Reagent="13" />
    </Chemistry>

    <Chemistry Name="Prime13x8">
      <Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" />
      <Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" />
    </Chemistry>

    <Chemistry Name="Prime14x15">
      <Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" />
      <Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" />
      <Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" />
    </Chemistry>

    <Chemistry Name="Prime14x8">
      <Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" />
      <Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" />
    </Chemistry>

    <Chemistry Name="Prime15x15">
      <Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" />
      <Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" />
      <Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" />
    </Chemistry>

    <Chemistry Name="Prime15x8">
      <Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" />
      <Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" />
    </Chemistry>

    <Chemistry Name="Prime16x15">
      <Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" />
      <Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" />
      <Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" />
    </Chemistry>

    <Chemistry Name="Prime16x8">
      <Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" />
      <Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" />
    </Chemistry>

    <Chemistry Name="Prime19x15">
      <Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" />
      <Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" />
      <Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" />
    </Chemistry>

    <Chemistry Name="Prime19x8">
      <Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" />
      <Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" />
    </Chemistry>

    <Chemistry Name="Prime21x19">
      <Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" />
      <Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" />
      <Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" />
      <Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" />
    </Chemistry>

    <Chemistry Name="Prime21x8">
      <Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" />
      <Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" />
    </Chemistry>

   <Chemistry Name="Prime22x19">
      <Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" />
      <Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" />
      <Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" />
      <Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" />
    </Chemistry>

   <Chemistry Name="Prime22x8">
      <Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" />
      <Prime Reagent="22" /><Prime Reagent="22" /><Prime Reagent="22" />
    </Chemistry>

	<!-- DEFINITIONS: PAIRED END MODULE (READ 2 PREPARATION / RESYNTHESIS) -->

     <Chemistry Name="Flow_test">
       <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2000" Volume="250" />
     </Chemistry>

     <Chemistry Name="Denaturation">
      <Temp Temperature="20" Duration="120000"/>
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <PumpToFlowcell Solution="19" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
    </Chemistry>

    <Chemistry Name="Deprotection">
      <PumpToFlowcell Solution="10" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <Temp Temperature="38" Duration="120000"/>
      <Wait Duration="1800000"/>
      <Temp Temperature="20" Duration="120000"/>
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
    </Chemistry>

    <Chemistry Name="Pre-resynthesis_wash">
      <PumpToFlowcell Solution="14" AspirationRate="60" DispenseRate="2500" Volume="150" />
      <Temp Temperature="60" Duration="120000"/>
    </Chemistry>    

    <Chemistry Name="Resynthesis">
      <PumpToFlowcell Solution="15" AspirationRate="30" DispenseRate="2500" Volume="28" />
      <PumpToFlowcell Solution="14" AspirationRate="30" DispenseRate="2500" Volume="28" />
      <PumpToFlowcell Solution="13" AspirationRate="30" DispenseRate="2500" Volume="36" />
    </Chemistry>

    <Chemistry Name="Post-resynthesis_wash">
      <PumpToFlowcell Solution="21" AspirationRate="30" DispenseRate="2500" Volume="245" />
      <Temp Temperature="20" Duration="120000"/>
    </Chemistry>

    <Chemistry Name="Linearisation 2">
      <PumpToFlowcell Solution="11" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <Temp Temperature="38" Duration="120000"/>
      <Wait Duration="1800000"/>
      <Temp Temperature="20" Duration="120000"/>
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <TempOff />
    </Chemistry>

    <Chemistry Name="Combined_blocking_1_2_new">
      <Temp Temperature="20" Duration="120000"/>
      <PumpToFlowcell Solution="12" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <Temp Temperature="38" Duration="120000"/>
      <Wait Duration="540000"/>
      <PumpToFlowcell Solution="12" AspirationRate="60" DispenseRate="2500" Volume="20" />
      <Wait Duration="540000"/>
      <PumpToFlowcell Solution="12" AspirationRate="60" DispenseRate="2500" Volume="20" />
      <Wait Duration="540000"/>    
      <PumpToFlowcell Solution="12" AspirationRate="60" DispenseRate="2500" Volume="25" />
      <Temp Temperature="60" Duration="120000"/>
      <Wait Duration="900000"/>
      <Temp Temperature="20" Duration="120000"/>
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
    </Chemistry>

    <Chemistry Name="Rehybridisation">
      <PumpToFlowcell Solution="19" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <PumpToFlowcell Solution="16" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <Temp Temperature="60" Duration="120000"/>
      <Wait Duration="300000"/>
      <Temp Temperature="40" Duration="120000"/>
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <Temp Temperature="20" Duration="120000"/>
      <TempOff />
    </Chemistry>

	 <!--  DEFINITIONS: PAIRED END MODULE (INDEXING PREPARATION) --> 

    <Chemistry Name="IndexingPreparation">
      <Temp Temperature="20" Duration="120000" /> 
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" /> 
      <PumpToFlowcell Solution="19" AspirationRate="60" DispenseRate="2500" Volume="75" /> 
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" /> 
      <PumpToFlowcell Solution="22" AspirationRate="60" DispenseRate="2500" Volume="75" /> 
      <Temp Temperature="60" Duration="120000" /> 
      <Wait Duration="300000" /> 
      <Temp Temperature="40" Duration="120000" /> 
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" /> 
      <Temp Temperature="20" Duration="120000" /> 
      <TempOff /> 
    </Chemistry>

  </ChemistryDefinitions>


  <Protocol>

    <UserWait Message="This recipe will perform an indexed paired end sequencing run (including read 2 resynthesis) and place the data into a single run folder." /> 

        <!-- INDEXING preparation -->

    <UserWait Message="Indexing reagents must be loaded onto the PEM prior to the start of Read 1 sequencing. First, to check correct operation of the PEM, please load water onto positions #19, #21 and #22. Place PEM waste tube into a 15 ml falcon tube." />

	<!-- PEM water prewash -->
  
    <ChemistryRef Name="Prime19x15" />  
    <ChemistryRef Name="Prime21x19" />
    <ChemistryRef Name="Prime22x19" />

    <UserWait Message="Priming complete. Check the waste tube. Click OK if the volume dispensed is 2.6 ml's and proceed to the next step. Otherwise, click Cancel and seek assistance before proceeding further" />

    <UserWait Message="Please load indexing reagents onto positions #19, #21 and #22. Place PEM waste tube into a 15 ml falcon tube." />

	<!-- Indexing reagent prime -->
  
    <ChemistryRef Name="Prime19x15" />  
    <ChemistryRef Name="Prime21x19" />
    <ChemistryRef Name="Prime22x19" />

    <UserWait Message="Priming complete. Check the waste tube. Click OK if the volume dispensed is 2.6 ml's and proceed to the next step. Otherwise, click Cancel and seek assistance before proceeding further" />

	<!-- READ 1 SBS -->

    <UserWait Message="Please verify that you have correctly specified the number of cycles, configured RTA, and ensured you have adequate storage space in the run folder for a run of that length.   Click OK to continue, or CANCEL to stop." />

    <ChemistryRef Name="FirstBase" />

    <UserWait Message="Read 1 First Base Incorporation Chemistry Complete.    Click OK to continue, or CANCEL to Stop." />

    <ChemistryRef Name="SMXFlush" />
    
    <Calibrate />

    <Findedge />
    
    <ReadPrep ExposureA="400" ExposureC="400" ExposureG="400" ExposureT="400" />
    
    <UserWait Message="Please Evaluate the First Base Report Data For Read 1.    Click OK to Proceed to First Cycle Imaging, or CANCEL to Stop." />

   		<!--      Read 1 - Cycle 1       -->
    <Incorporation ChemistryName="SMXFlush" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />
 
   		<!--      Read 1 - Cycle 2       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

 	  	<!--      Read 1 - Cycle 3       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />
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
		<!--      Read 1 - Cycle 76       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

    <!-- Multiplexing Chemistry -->

    <OpenIndex Name="Index" />

    <ChemistryRef Name="IndexingPreparation" /> 

    <ChemistryRef Name="FirstBase" /> 

    <ChemistryRef Name="SMXFlush" />

    <!--      Read Index - Cycle 1       -->
    <Incorporation ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

    <!--      Read Index - Cycle 2       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

    <!--      Read Index - Cycle 3       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

    <!--      Read Index - Cycle 4       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

    <!--      Read Index - Cycle 5       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

    <!--      Read Index - Cycle 6       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />
  
    <!--      Read Index - Cycle 7       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

    <!--      Read Index - Cycle 8       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />
   
    <ChemistryRef Name="EndDeblock" />

    <CloseIndex/>

    <UserWait Message="Read 1 SBS Complete." />    

    <UserWait Message="To check correct operation of the PEM priming pump, place PEM waste tube into a 15 ml falcon tube. Load water onto the Paired End Module (Positions #10, #11, #12, #13, #14, #15, #16, #19, #21. Click OK to Continue." />

	<!-- PEM water prewash -->

    <ChemistryRef Name="Prime10x12" />
    <ChemistryRef Name="Prime11x12" />
    <ChemistryRef Name="Prime12x12" />
    <ChemistryRef Name="Prime13x12" />
    <ChemistryRef Name="Prime14x15" />  
    <ChemistryRef Name="Prime15x15" />
    <ChemistryRef Name="Prime16x15" />  
    <ChemistryRef Name="Prime19x15" />  
    <ChemistryRef Name="Prime21x19" />

    <UserWait Message="Priming complete. Check the waste tube. Click OK if the volume dispensed is 6.3 ml's and proceed to the next step. Otherwise, click Cancel and seek assistance before proceeding further" />    

<UserWait Message="Load Read 2 Resynthesis Reagents onto the Paired End Module (RMX-#10, LMX2-#11, BMX-#12, AMX2-#13, APM2-#14, AT2-#15, HP2-#16, Dil HP3-#19, HT2-#21. Click OK to Continue." />

	<!-- READ 2 PRIMING OF PAIRED END MODULE (PEM) -->

    <ChemistryRef Name="Prime10x12" />
    <ChemistryRef Name="Prime11x12" />
    <ChemistryRef Name="Prime12x12" />
    <ChemistryRef Name="Prime13x12" />
    <ChemistryRef Name="Prime14x15" />  
    <ChemistryRef Name="Prime15x15" />
    <ChemistryRef Name="Prime16x15" />  
    <ChemistryRef Name="Prime19x15" />  
    <ChemistryRef Name="Prime21x19" />

    <UserWait Message="Priming complete. Check the waste tube. Click OK if the volume dispensed is 6.3 ml's and proceed to the next step. Otherwise, click Cancel and seek assistance before proceeding further" />

    <UserWait Message="You are about to run a pump test to check correct flow from PEM to GA by flowing wash buffer across the flowcell. Place GA waste tubes in a 15 ml falcon tube. Press OK to continue" />

    <ChemistryRef Name="Flow_test" />

    <UserWait Message="Check the waste tube. Click OK if the volume dispensed is 2 ml. Otherwise, click Cancel and seek assistance before proceeding further" />

    <UserWait Message="Place all waste lines back in waste bottle and click OK to Start PE Read 2 Preparation on the PE Module" />

	<!-- READ 2 PREPARATION / RESYNTHESIS (PEM) -->

    <ChemistryRef Name="Denaturation" />
    <ChemistryRef Name="Deprotection" />
    <ChemistryRef Name="Pre-resynthesis_wash" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Post-resynthesis_wash" />
    <ChemistryRef Name="Linearisation 2" />
    <ChemistryRef Name="Combined_blocking_1_2_new" />
    <ChemistryRef Name="Rehybridisation" />

    <UserWait Message="Resynthesis complete.    Load water onto the Paired End Module (Positions #10, #11, #12, #13, #14, #15, #16, #19, #21 and #22. Click OK to Continue." />

	<!-- PEM water postwash -->

    <ChemistryRef Name="Prime10x8" />
    <ChemistryRef Name="Prime11x8" />
    <ChemistryRef Name="Prime12x8" />
    <ChemistryRef Name="Prime13x8" />
    <ChemistryRef Name="Prime14x8" />  
    <ChemistryRef Name="Prime15x8" />
    <ChemistryRef Name="Prime16x8" />  
    <ChemistryRef Name="Prime19x8" />  
    <ChemistryRef Name="Prime21x8" />
    <ChemistryRef Name="Prime22x8" />

    <UserWait Message="Load Read 2 SBS reagents onto the GA. Click OK to Continue." />

	<!-- READ 2 SBS (includes FirstBase) -->

    <ChemistryRef Name="FirstBase" />

    <UserWait Message="Read 2 First Base Incorporation Chemistry Complete.    Click OK to continue, or CANCEL to Stop." />

    <ChemistryRef Name="SMXFlush" />

    <Calibrate />

    <ReadPrep ExposureA="400" ExposureC="400" ExposureG="400" ExposureT="400" /> 

    <ChemistryRef Name="PR2Flush" /> 

    <UserWait Message="Please Evaluate the First Base Report Data For Read 2. Click OK to Proceed to Imaging, or CANCEL to Stop." />
		
   		<!--      Read 2 - Cycle 1       -->
    <Incorporation ChemistryName="SMXFlush" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />
 
   		<!--      Read 2 - Cycle 2       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

 	  	<!--      Read 2 - Cycle 3       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />
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
		<!--      Read 2 - Cycle 76       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />
 	  	   		   
    <ChemistryRef Name="End" />

  </Protocol>

</RecipeFile>
