<?xml version="1.0" ?>
<RecipeFile>

	<!-- GA2_37Cycle_PE_v6.1.xml -->
	<!-- For use with AF4a ImageCyclePump config file -->
	<!-- DO NOT USE with the GA1 Sequencer -->
	<!-- Last Updated 02Mar09 - TWBO -->

	<!-- Paired End Recipe -->
	<!-- Incorporation and Deblock incubation wait times reduced to 80 s -->
	<!-- Wait time after temperature changes reduced from 120 s to 0 s -->

	<!-- TempOff command moved to directly after Temp=22 command -->
	<!-- Wash at 55oC between Deblock and Incorporation -->
	<!-- PR1 (HSB) no longer used -->
	<!-- PR2 (IB) used in positions 4 and 5 -->
	<!-- 60 ul/min scan mix pumping -->

	<!-- Exposure Time: 1225ms (A=500, C=350, G=200, T=175) -->
	<!-- No. Tiles Per Column: 60 -->
	<!-- No. Cycles: 37 -->


  <TileSelection>

    <Incorporation>
	<Lane Index="1"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="2"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="3"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="4"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="5"><RowRange Min="1" Max="60"/></Lane>

	<Lane Index="6"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="7"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="8"><RowRange Min="1" Max="60"/></Lane>
    </Incorporation>

  </TileSelection>

  <ChemistryDefinitions>

    <Chemistry Name="CompleteCycle">

	<PumpToFlowcell Solution="7" AspirationRate="250" DispenseRate="2500" Volume="125" />
	<Temp Temperature="55" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="75" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="75" />

  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="75" />
  	<Wait Duration="80000" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="25" />
  	<Wait Duration="80000" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="25" />
  	<Wait Duration="80000" />
  	<Temp Temperature="22" />
	<TempOff />
  	<PumpToFlowcell Solution="4" AspirationRate="250" DispenseRate="2500" Volume="75" />

	<PumpToFlowcell Solution="3" AspirationRate="60" DispenseRate="2500" Volume="75" />
    </Chemistry>

    <Chemistry Name="EndDeblock">
	<PumpToFlowcell Solution="7" AspirationRate="250" DispenseRate="2500" Volume="125" />
	<Temp Temperature="55" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="75" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />

	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<Temp Temperature="22" />
	<TempOff />
	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="75" />
    </Chemistry>

  </ChemistryDefinitions>

  <Protocol>

    <UserWait Message="Please Ensure that You have Previously Run the GA2_FirstBase Recipe.    Click OK to Continue, or CANCEL to Stop." /> 

   		<!--      Cycle 1       -->
    <Incorporation ExposureA="500" ExposureC="350" ExposureG="200"  ExposureT="175" />
 
   		<!--      Cycle 2       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

 	  	<!--      Cycle 3       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

	   	<!--      Cycle 4       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 5       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 6       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

 	  	<!--      Cycle 7       -->

    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

	   	<!--      Cycle 8       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 9       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 10       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 11       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 12       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 13       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 14       -->

    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 15       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

 	  	<!--      Cycle 16       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

	   	<!--      Cycle 17       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 18       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 19       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 20       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 21       -->

    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 22       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 23       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 24       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 25       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 26       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 27       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

 	  	<!--      Cycle 28       -->

    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

	   	<!--      Cycle 29       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 30       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 31       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 32       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 33       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 34       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 35       -->

    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 36       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

		<!--      Cycle 37       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

    <ChemistryRef Name="EndDeblock" />

  </Protocol>

</RecipeFile>
